<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

<!-- 
Modified from basic_radial_gridding 2016-01 configuration
Updated gadgets to match those in NonCartesian_Grappa recon xml 

NOTES:

- 2D
- Scaling hack
- Assumes encoding matrix size = recon matrix size
- Encoding matrix size must be a multiple of warp size, 32
      
-->

  <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- RO oversampling removal 
    <gadget><name>RemoveROOversampling</name><dll>gadgetron_mricore</dll><classname>RemoveROOversamplingGadget</classname></gadget>
-->
    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>slice</value></property>
        <property><name>sorting_dimension</name><value>slice</value></property>
    </gadget>

    <gadget>
        <name>BucketToBufferGadget</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>repetition</value></property>
        <property><name>S_dimension</name><value>slice</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>
<!--- N_dimension, S_dimension parameters tell the gadget what data to put in those dimensions of the array -->


    <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>noncart_grappa_lib</dll>
        <classname>GenericReconNonCartesianReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- averaging across N -->
        <property><name>average_all_ref_N</name><value>false</value></property>
        <!-- every set has its own kernels / average across S -->
        <property><name>average_all_ref_S</name><value>false</value></property>
        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>false</value></property>
    </gadget>

   <!-- Coil compression
<gadget>
	<name>CoilCompression</name>
	<dll>radial_grappa_lib</dll>
	<classname>GrappaCoilCompressionGadget_Calibration</classname>

         parameters for debug and timing 
        <property><name>debug_folder</name><value>debug_out</value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>true</value></property>

        <property><name>average_all_ref_N</name><value>true</value></property>
        <property><name>average_all_ref_S</name><value>false</value></property>

	Up stream coil compression 
        <property><name>upstream_coil_compression</name><value>false</value></property>
        <property><name>upstream_coil_compression_thres</name><value>-1</value></property>
        <property><name>upstream_coil_compression_num_modesKept</name><value>16</value></property>
</gadget>
-->

  <!-- Pass-through recon -->
    <gadget>
        <name>Recon</name>
        <dll>basicradial_lib</dll>
        <classname>PassThroughGadget</classname>
	<property><name>debug_folder</name><value>debug_out</value></property>
	<property><name>dataset_3D</name><value>false</value></property>
    </gadget>

    <!-- NUFFT  -->
    <gadget>
      <name>NFFT2DGadget_basic</name>
      <dll>basicradial_lib</dll>
      <classname>NFFT2DGadget_basic</classname>
	<property><name>debug_folder</name><value>debug_out</value></property>
	<property><name>perform_timing</name><value>true</value></property>
    </gadget>

    <!--
	<gadget>
	<name>ImageWrite</name>
	<dll>gadgetron_mricore</dll>
	<classname>ImageWriterGadgetFLOAT</classname>
	</gadget>
    -->

      <!-- FOV Adjustment -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>

    <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing-->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>true</value></property>

        <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>30000000000000.0</value></property> 
 	<!-- <property><name>scalingFactor</name><value>100000.0</value></property> -->
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>100.0</value></property>
    </gadget>


    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <!-- after recon processing -->
    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>

        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property>

    </gadget>

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
