<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

<!--
Modified 06/2016 by DNF from Generic_Cartesian_Grappa.xml
- Removed some gadgets. ** Can consider re-inserting ones such as kspace filtering and noise adjustment after working through the rest of the pipeline.
- Need to modify the default gadgetron code to include a set M function for coil compression

Save outputs to: /tmp/gadgetron/debug_out
-->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- RO oversampling removal -->
    <gadget><name>RemoveROOversampling</name><dll>radial_grappa_combined_lib</dll><classname>RemoveROOversamplingDFGadget</classname>
    <property><name>perform_timing</name><value>false</value></property>
    </gadget>



    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>segment</value></property>
        <property><name>sorting_dimension</name><value>segment</value></property>
    </gadget>

    <gadget>
        <name>BucketToBufferDF</name>
        <dll>radial_grappa_combined_lib</dll>
        <classname>BucketToBufferDFGadget</classname>
        <property><name>N_dimension</name><value>repetition</value></property>
        <property><name>S_dimension</name><value>segment</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
        <property><name>verbose</name><value>false</value></property>
        <property><name>perform_timing</name><value>false</value></property>
    </gadget>

<!--- N_dimension, S_dimension parameters tell the gadget what data to put in those dimensions of the array -->

    <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>radial_grappa_combined_lib</dll>
        <classname>RadialGrappaCombinedReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>false</value></property>

        <!-- averaging across N -->
        <property><name>average_all_ref_N</name><value>false</value></property>
        <!-- every set has its own kernels / average across S -->
        <property><name>average_all_ref_S</name><value>false</value></property>
        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>false</value></property>
    </gadget>

<!-- Coil compression -->
<gadget>
	<name>CoilCompression</name>
	<dll>radial_grappa_combined_lib</dll>
	<classname>GrappaCombinedCoilCompressionGadget_Calibration</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value>debug_out_df</value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>average_all_ref_N</name><value>true</value></property>
        <property><name>average_all_ref_S</name><value>false</value></property>

	<!-- Up stream coil compression -->
        <property><name>upstream_coil_compression</name><value>true</value></property>
        <property><name>upstream_coil_compression_thres</name><value>-1</value></property>
        <property><name>upstream_coil_compression_num_modesKept</name><value>12</value></property>
</gadget>

    <!-- Recon -->
    <gadget>
        <name>Recon</name>
        <dll>radial_grappa_combined_lib</dll>
        <classname>RadialGrappaCombinedCalibrationGadget</classname>

        <!-- image series -->
        <property><name>image_series</name><value>0</value></property>

        <!-- Coil map estimation, Inati or Inati_Iter -->
        <property><name>coil_map_algorithm</name><value>Inati</value></property>

        <!-- Down stream coil compression -->
        <property><name>downstream_coil_compression</name><value>false</value></property>
        <property><name>downstream_coil_compression_thres</name><value>0.01</value></property>
        <property><name>downstream_coil_compression_num_modesKept</name><value>14</value></property>

	<!-- parameters for calibration -->
	<!-- note: only supports grappa_segSize_E1 = 1 -->
	<property><name>grappa_reg_lamda</name><value>0.0005</value></property>	
	<property><name>grappa_kSize_RO</name><value>3</value></property>
	<property><name>grappa_kSize_E1</name><value>2</value></property>
	<property><name>grappa_kSize_E2</name><value>1</value></property>
	<property><name>grappa_segSize_RO</name><value>8</value></property>
	<property><name>grappa_segSize_E1</name><value>1</value></property> 
	<property><name>use_gpu_</name><value>true</value></property>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value>debug_out_df</value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <!-- whether to send out gfactor -->
        <property><name>send_out_gfactor</name><value>false</value></property>
    </gadget>

 <!-- NUFFT  -->
    <gadget>
      <name>NFFT2DGadget_basic</name>
      <dll>basicradial_lib</dll>
      <classname>NFFT2DGadget_basic</classname>
      <property><name>perform_timing</name><value>false</value></property>
	<property><name>debug_folder</name><value></value></property>
    </gadget>

     <!-- FOV Adjustment  -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

      <!-- parameters for debug and timing  -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>


    <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

          <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
         <property><name>scalingFactor</name><value>30000000000000.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>100.0</value></property>
    </gadget>


   <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplitDFGadget</name>
        <dll>radial_grappa_combined_lib</dll>
        <classname>ImageArraySplitDFGadget</classname>
        <property><name>perform_timing</name><value>false</value></property>
    </gadget>
    -->


    <!-- after recon processing -->
    <gadget>
        <name>ComplexToFloatDFAttrib</name>
        <dll>radial_grappa_combined_lib</dll>
        <classname>ComplexToFloatDFGadget</classname>
        <property><name>perform_timing</name><value>false</value></property>
    </gadget>

    <gadget>
        <name>FloatToShortDFAttrib</name>
        <dll>radial_grappa_combined_lib</dll>
        <classname>FloatToUShortDFGadget</classname>

        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property>
        <property><name>perform_timing</name><value>false</value></property>        
    </gadget>

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
